PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychopy_image_and_mouse
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent image
      image = G:/github_projects/PyResearchWorkshop/02_basics/res/psychopy-builder.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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    MouseComponent mouse
      clickable = image
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [condition] = False
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Flow
  Routine trial
